PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'eye_lr': '1'}
  Full-screen window = True
  Monitor = tiffany_laptop
  Screen = 1
  Units = cm
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = map
  logging level = debug
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Routines
  Routine Calibration
    PolygonComponent alignment_rectangle
      fillColor = $[-1,-1,-1]
      shape = rectangle
      size = (26, 16)
      startVal [time (s)] = 0
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    PolygonComponent fixate_vert
      fillColor = $[1,1,1]
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixate_horiz
      fillColor = $[1,1,1]
      ori = 90
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent confirm_prompt
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = Press Space to confirm calibration.
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    KeyboardComponent key_resp
      allowedKeys = 'space','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    PolygonComponent fixate_vert_2
      fillColor = $[1,1,1]
      pos [set every repeat] = (5*int(expInfo['eye_lr']),0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent fixate_horiz_2
      fillColor = $[1,1,1]
      ori = 90
      pos [set every repeat] = (5*int(expInfo['eye_lr']), 0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent bottom_line
      fillColor = $[1,1,1]
      pos [set every repeat] = (-2*int(expInfo['eye_lr']),-4)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent middle_line
      fillColor = $[1,1,1]
      pos [set every repeat] = (-2*int(expInfo['eye_lr']), 0)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent top_line
      fillColor = $[1,1,1]
      pos [set every repeat] = (-2*int(expInfo['eye_lr']), 4+loc)
      shape = line
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent blind_spot
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 50
      opacity = 0.5
      pos [set every repeat] = (-2*int(expInfo['eye_lr']), -2)
      shape = regular polygon...
      size = (2,2)
      startVal [time (s)] = 0.0
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Flow
  Routine Calibration
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/top_line_locs.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('loc', -0.3)]),
      OrderedDict([('loc', -0.2)]),
      OrderedDict([('loc', -0.1)]),
      OrderedDict([('loc', 0.0)]),
      OrderedDict([('loc', 0.1)]),
      OrderedDict([('loc', 0.2)]),
      OrderedDict([('loc', 0.3)])]
    Routine Trial
  LoopTerminator trials
  Routine Calibration
